<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.Physics.Collision;assembly=Bonsai.Physics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:Bonsai.Physics;assembly=Bonsai.Physics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:p3="clr-namespace:;assembly=Extensions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>ResponseServer</osc:Name>
          <osc:Port>0</osc:Port>
          <osc:RemoteHostName>127.0.0.1</osc:RemoteHostName>
          <osc:RemotePort>5006</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>CommandClient</osc:Name>
          <osc:Port>5005</osc:Port>
          <osc:RemotePort>0</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateRenderState">
          <gl:RenderState>
            <gl:StateConfiguration xsi:type="gl:BlendFunctionState">
              <gl:SourceFactor>One</gl:SourceFactor>
              <gl:DestinationFactor>One</gl:DestinationFactor>
            </gl:StateConfiguration>
          </gl:RenderState>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/decoder</osc:Address>
        <osc:TypeTag>s</osc:TypeTag>
        <osc:Connection>CommandClient</osc:Connection>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Simulator</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateHashSpace">
                <p1:MinLevel xsi:nil="true" />
                <p1:MaxLevel xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="ResourceSubject">
              <Name>Space</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Space</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateSphere">
                <p1:Enabled>true</p1:Enabled>
                <p1:CategoryBits>1</p1:CategoryBits>
                <p1:CollideBits xsi:nil="true" />
                <p1:Position xsi:nil="true" />
                <p1:Orientation xsi:nil="true" />
                <p1:Radius>0.05</p1:Radius>
              </Combinator>
            </Expression>
            <Expression xsi:type="ResourceSubject">
              <Name>Cursor</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Space</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateSphere">
                <p1:Enabled>true</p1:Enabled>
                <p1:CategoryBits>2</p1:CategoryBits>
                <p1:CollideBits>1</p1:CollideBits>
                <p1:Position xsi:nil="true" />
                <p1:Orientation xsi:nil="true" />
                <p1:Radius>0.1</p1:Radius>
              </Combinator>
            </Expression>
            <Expression xsi:type="ResourceSubject">
              <Name>HoldTarget</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Space</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateSphere">
                <p1:Enabled>true</p1:Enabled>
                <p1:CategoryBits>4</p1:CategoryBits>
                <p1:CollideBits>1</p1:CollideBits>
                <p1:Position xsi:nil="true" />
                <p1:Orientation xsi:nil="true" />
                <p1:Radius>0.1</p1:Radius>
              </Combinator>
            </Expression>
            <Expression xsi:type="ResourceSubject">
              <Name>ReachTarget</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Cursor</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DecodeEMG</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="BufferSize" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:EmgAcquisition">
                      <p3:BufferSize>10</p3:BufferSize>
                      <p3:NumChannels>32</p3:NumChannels>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PublishSubject">
                    <Name>Signal</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Submatrix">
                      <dsp:StartRow>0</dsp:StartRow>
                      <dsp:EndRow>32</dsp:EndRow>
                      <dsp:StartCol>0</dsp:StartCol>
                      <dsp:EndCol xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:ConvertScale">
                      <dsp:Depth>F32</dsp:Depth>
                      <dsp:Scale>1</dsp:Scale>
                      <dsp:Shift>0</dsp:Shift>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:UpdateDecoder">
                      <p3:BufferSize>10</p3:BufferSize>
                      <p3:DecoderFileName>C:\Users\spencer\Documents\kyberphysics\src\python\decoder.bin</p3:DecoderFileName>
                      <p3:DynamicsFileName>C:\Users\spencer\Documents\kyberphysics\src\python\dynamics.bin</p3:DynamicsFileName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Submatrix">
                      <dsp:StartRow>0</dsp:StartRow>
                      <dsp:EndRow>2</dsp:EndRow>
                      <dsp:StartCol>0</dsp:StartCol>
                      <dsp:EndCol>10</dsp:EndCol>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Abs" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Buffer">
                      <dsp:Count>100</dsp:Count>
                      <dsp:Skip>1</dsp:Skip>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Reduce">
                      <dsp:Axis>1</dsp:Axis>
                      <dsp:Operation>Avg</dsp:Operation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>-1000000</dsp:Min>
                      <dsp:Max>1000000</dsp:Max>
                      <dsp:RangeMin>-1</dsp:RangeMin>
                      <dsp:RangeMax>1</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:ConvertToVector2" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="5" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>UpdateCursor</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Cursor</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="X" />
                      <Property Name="Y" Selector="Y" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateVector3">
                      <gl:X>0</gl:X>
                      <gl:Y>0</gl:Y>
                      <gl:Z>0</gl:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Position" Selector="Item1.X,Item1.Y,Item1.Z" />
                    </PropertyMappings>
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:SetTransform">
                      <p2:Position>
                        <p2:X>0</p2:X>
                        <p2:Y>0</p2:Y>
                        <p2:Z>0</p2:Z>
                      </p2:Position>
                      <p2:Orientation xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Position.X as LocationX,
Position.Y as LocationY,
2*Radius as Diameter)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>CursorTrajectory</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" Selector="LocationX" />
                <Property Name="LocationY" Selector="LocationY" />
                <Property Name="Diameter" Selector="Diameter" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Diameter>0.1</Diameter>
              <ColorR>0.8</ColorR>
              <ColorG>0.3</ColorG>
              <ColorB>0.3</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/metadata</osc:Address>
        <osc:TypeTag>is</osc:TypeTag>
        <osc:Connection>CommandClient</osc:Connection>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as NumChannels,
Item2 as Filename
)</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Metadata</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Trials</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>NaN</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Highlight</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Metadata</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Filename</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/start</osc:Address>
              <osc:TypeTag>sfffiii</osc:TypeTag>
              <osc:Connection>CommandClient</osc:Connection>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item1 as Filename,
Item2 as TargetX,
Item3 as TargetY,
Item4 as Radius,
Item5 as TimeoutTime,
Item6 as HoldingTime,
Item7 as ReachTime)</scr:Expression>
            </Expression>
            <Expression xsi:type="CreateObservable">
              <Name>CreateTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="AsyncSubject">
                    <Name>TrialParameters</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Name>CenterHold</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HoldTarget</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(
Position.X as LocationX,
Position.Y as LocationY,
2*Radius as Diameter)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LocationX" Selector="LocationX" />
                            <Property Name="LocationY" Selector="LocationY" />
                            <Property Name="Diameter" Selector="Diameter" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                          <LocationX>0</LocationX>
                          <LocationY>0</LocationY>
                          <Layer>0</Layer>
                          <Diameter>0.2</Diameter>
                          <ColorR>0.2</ColorR>
                          <ColorG>0.8</ColorG>
                          <ColorB>0.2</ColorB>
                          <ColorA>1</ColorA>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HoldTarget</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:LatestOnUpdateFrame" />
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Collision</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:CollideGeom">
                                  <p1:MaxContacts>1</p1:MaxContacts>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Length</Selector>
                              </Expression>
                              <Expression xsi:type="GreaterThan">
                                <Operand xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="PublishSubject">
                          <Name>HoldingState</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>TimeoutTimer</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TrialParameters</Name>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>TimeSpan.FromMilliseconds(TimeoutTime)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Timer">
                                  <gl:DueTime>PT5S</gl:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>HoldingTimer</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TrialParameters</Name>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>TimeSpan.FromMilliseconds(HoldingTime)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Timer">
                                  <gl:DueTime>PT0.5S</gl:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HoldingState</Name>
                              </Expression>
                              <Expression xsi:type="Condition">
                                <Name>Holding</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HoldingState</Name>
                              </Expression>
                              <Expression xsi:type="Condition">
                                <Name>NotHolding</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="BitwiseNot" />
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:TakeUntil" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:SubscribeWhen" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Repeat" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="8" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="9" Label="Source2" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source2" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:UpdateFrame" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TimeStep.ElapsedTime</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Accumulate" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="4" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="13" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="17" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source2" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="AsyncSubject">
                    <Name>HoldResult</Name>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>Hold</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Name>ReachToTarget</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TrialParameters</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>UpdateCursor</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ReachTarget</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="InputMapping">
                                <PropertyMappings>
                                  <Property Name="X" Selector="TargetX" />
                                  <Property Name="Y" Selector="TargetY" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:CreateVector3">
                                  <gl:X>-0.5</gl:X>
                                  <gl:Y>0</gl:Y>
                                  <gl:Z>0</gl:Z>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:CombineLatest" />
                              </Expression>
                              <Expression xsi:type="InputMapping">
                                <PropertyMappings>
                                  <Property Name="Position" Selector="Item1.X,Item1.Y,Item1.Z" />
                                </PropertyMappings>
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p2:SetTransform">
                                  <p2:Position>
                                    <p2:X>-0.5</p2:X>
                                    <p2:Y>0</p2:Y>
                                    <p2:Z>0</p2:Z>
                                  </p2:Position>
                                  <p2:Orientation xsi:nil="true" />
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(
Position.X as LocationX,
Position.Y as LocationY,
2*Radius as Diameter)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="4" Label="Source2" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LocationX" Selector="LocationX" />
                            <Property Name="LocationY" Selector="LocationY" />
                            <Property Name="Diameter" Selector="Diameter" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                          <LocationX>-0.5</LocationX>
                          <LocationY>0</LocationY>
                          <Layer>0</Layer>
                          <Diameter>0.2</Diameter>
                          <ColorR>0</ColorR>
                          <ColorG>0.8</ColorG>
                          <ColorB>0.8</ColorB>
                          <ColorA>1</ColorA>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ReachTarget</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:LatestOnUpdateFrame" />
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Collision</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:CollideGeom">
                                  <p1:MaxContacts>1</p1:MaxContacts>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Length</Selector>
                              </Expression>
                              <Expression xsi:type="GreaterThan">
                                <Operand xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="PublishSubject">
                          <Name>ReachState</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ReachState</Name>
                        </Expression>
                        <Expression xsi:type="Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>ReachTimer</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TrialParameters</Name>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>TimeSpan.FromMilliseconds(ReachTime)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Timer">
                                  <gl:DueTime>PT5S</gl:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>-1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:UpdateFrame" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TimeStep.ElapsedTime</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Accumulate" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="4" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="14" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="18" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source2" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:LastOrDefault" />
                  </Expression>
                  <Expression xsi:type="AsyncSubject">
                    <Name>ReachResult</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HoldResult</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ReachResult</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Item2 == null ?
new(0 as Outcome, single(Item1.Item2) as HoldTime, single.NaN as ReachTime) :
new(Item2.Item1 as Outcome, single(Item1.Item2) as HoldTime, single(Item2.Item2) as ReachTime)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Signal</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Filename</Selector>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.bin</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Path>../../data/reaching/test/emg__direction_6_trial_1.bin</dsp:Path>
                      <dsp:Suffix>Timestamp</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Filename</Selector>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.csv</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>FrameEventLogger</Name>
                    <Description>Creates and initializes a CSV file, and matching behavior subject, used to log events with frame timing.</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedProperty">
                          <MemberName>Name</MemberName>
                          <Name>Name</Name>
                          <Description>The name of the subject on which events will be logged.</Description>
                          <Category>Subject</Category>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:IgnoreElements" />
                        </Expression>
                        <Expression xsi:type="BehaviorSubject">
                          <Name>Events</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Append" />
                          <Property Name="Overwrite" />
                          <Property Name="Suffix" />
                          <Property Name="FileName" />
                        </Expression>
                        <Expression xsi:type="Sink">
                          <Name>CsvLogger</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>TimeStep.ElapsedRealTime</Selector>
                              </Expression>
                              <Expression xsi:type="rx:Accumulate" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:ElementIndex" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Append" />
                                <Property Name="Overwrite" />
                                <Property Name="Suffix" />
                                <Property Name="FileName" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Name" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Events</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(
Item2.Index as Frame,
Item2.Value as Timestamp,
Item1 as Value)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="io:CsvWriter">
                                <io:FileName>../../data/reaching/test/emg__direction_6_trial_1.csv</io:FileName>
                                <io:Delimiter>,</io:Delimiter>
                                <io:Append>false</io:Append>
                                <io:Overwrite>false</io:Overwrite>
                                <io:Suffix>None</io:Suffix>
                                <io:IncludeHeader>true</io:IncludeHeader>
                                <io:Selector />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="7" Label="Source2" />
                              <Edge From="4" To="9" Label="Source2" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source2" />
                        <Edge From="0" To="6" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="6" Label="Source3" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CursorTrajectory</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
                    <Format>{0},{1}</Format>
                    <Selector>LocationX,LocationY</Selector>
                    <Name>Events</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="19" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="25" Label="Source2" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="osc:SendMessage">
              <osc:Connection>ResponseServer</osc:Connection>
              <osc:Address>/end</osc:Address>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>../../data/reaching/test/_behavior.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="11" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Metadata</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/session_end</osc:Address>
        <osc:TypeTag>i</osc:TypeTag>
        <osc:Connection>CommandClient</osc:Connection>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>