<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:p2="clr-namespace:Bonsai.Physics.Collision;assembly=Bonsai.Physics"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p3="clr-namespace:Bonsai.Physics;assembly=Bonsai.Physics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>EMG</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>64</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="NumChannels" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="BufferSize" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:EmgAcquisition">
                <p1:BufferSize>10</p1:BufferSize>
                <p1:NumChannels>64</p1:NumChannels>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>EmgData</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\CursorFilteredEMG.bonsai" />
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/trial_params</osc:Address>
        <osc:TypeTag>sfffiii</osc:TypeTag>
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as TrialIndex,
Item2 as TargetX,
Item3 as TargetY,
Item4 as Radius,
Item5 as TimeoutTime,
Item6 as HoldingTime,
Item7 as ReachTime
)</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>TrialParams</Name>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/decoding_params</osc:Address>
        <osc:TypeTag>ss</osc:TypeTag>
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as DecoderFilename,
Item2 as DynamicsFilename
)</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>DecodingParams</Name>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/session_params</osc:Address>
        <osc:TypeTag>ii</osc:TypeTag>
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as Min,
Item2 as Max
)</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>SessionParams</Name>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/recording_params</osc:Address>
        <osc:TypeTag>iiis</osc:TypeTag>
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as NumChannels,
Item2 as BufferSize,
Item3 as SamplingFreq,
Item4 as RecordPath)</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>RecordingParams</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateRenderState">
          <gl:RenderState>
            <gl:StateConfiguration xsi:type="gl:BlendFunctionState">
              <gl:SourceFactor>One</gl:SourceFactor>
              <gl:DestinationFactor>One</gl:DestinationFactor>
            </gl:StateConfiguration>
          </gl:RenderState>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:CreateHashSpace">
          <p2:MinLevel xsi:nil="true" />
          <p2:MaxLevel xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="ResourceSubject">
        <Name>Space</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Space</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:CreateSphere">
          <p2:Enabled>true</p2:Enabled>
          <p2:CategoryBits>1</p2:CategoryBits>
          <p2:CollideBits xsi:nil="true" />
          <p2:Position xsi:nil="true" />
          <p2:Orientation xsi:nil="true" />
          <p2:Radius>0.05</p2:Radius>
        </Combinator>
      </Expression>
      <Expression xsi:type="ResourceSubject">
        <Name>Cursor</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionParams</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Min" Selector="Min" />
          <Property Name="Max" Selector="Max" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DecodeEMG</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>FilteredEMG</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Submatrix">
                <dsp:StartRow>0</dsp:StartRow>
                <dsp:EndRow>64</dsp:EndRow>
                <dsp:StartCol>0</dsp:StartCol>
                <dsp:EndCol xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DecodingParams</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DecoderFilename</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DecoderFileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DecodingParams</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DynamicsFilename</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DynamicsFileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Min" />
              <Property Name="Max" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>6</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="StateDimension" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:UpdateDecoder">
                <p1:BufferSize>1</p1:BufferSize>
                <p1:DecoderFileName>C:/Users/spencer/Documents/kyberphysics/metadata/emg_olympics/spencer/decoder.bin</p1:DecoderFileName>
                <p1:DynamicsFileName>C:/Users/spencer/Documents/kyberphysics/metadata/emg_olympics/spencer/dynamics.bin</p1:DynamicsFileName>
                <p1:StateDimension>6</p1:StateDimension>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Submatrix">
                <dsp:StartRow>4</dsp:StartRow>
                <dsp:EndRow>6</dsp:EndRow>
                <dsp:StartCol>0</dsp:StartCol>
                <dsp:EndCol xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>-50</dsp:Min>
                <dsp:Max>50</dsp:Max>
                <dsp:RangeMin>-1</dsp:RangeMin>
                <dsp:RangeMax>1</dsp:RangeMax>
                <dsp:RescaleType>Clamp</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ConvertToVector2" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="11" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="11" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="11" Label="Source3" />
            <Edge From="8" To="13" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source4" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UpdateCursor</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Cursor</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="X" />
                <Property Name="Y" Selector="Y" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>0.3103552</gl:X>
                <gl:Y>0.212917611</gl:Y>
                <gl:Z>0</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Position" Selector="Item1.X,Item1.Y,Item1.Z" />
              </PropertyMappings>
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:SetTransform">
                <p3:Position>
                  <p3:X>0.31035518646240234</p3:X>
                  <p3:Y>0.21291761100292206</p3:Y>
                  <p3:Z>0</p3:Z>
                </p3:Position>
                <p3:Orientation xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Position.X as LocationX,
Position.Y as LocationY,
2*Radius as Diameter)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>CursorTrajectory</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationX" Selector="LocationX" />
          <Property Name="LocationY" Selector="LocationY" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialParams</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Radius</Selector>
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="FloatProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Diameter" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
        <LocationX>0.3103552</LocationX>
        <LocationY>0.212917611</LocationY>
        <Layer>10</Layer>
        <Diameter>0.1</Diameter>
        <ColorR>0</ColorR>
        <ColorG>0</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="38" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="38" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source3" />
    </Edges>
  </Workflow>
</WorkflowBuilder>